---
API: 2
OpenSesame: 3.1.1
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Bilingual Mismatch Negativity"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen yes
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/EEG Experimenty/Documents/GitHub/BilingualMMN"
set disable_garbage_collection yes
set description "Adaptation of audio-visual MMN paradigm in bilingual neuropsychology research"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define keyboard_response answerA
	set timeout 1000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response answerB
	set timeout 1000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response answer_practice
	set timeout 1000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define synth beepA
	set volume 1
	set pan 0
	set osc sine
	set length 75
	set freq 1000
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 5

define synth beepB
	set volume 1
	set pan 0
	set osc sine
	set length 30
	set freq 1000
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 5

define synth beep_practice
	set volume 1
	set pan 0
	set osc sine
	set length 75
	set freq 1000
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 5

define sketchpad blankA
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad blankB
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad blank_practice
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define loop blockA
	set source_file "blockA.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trialA

define loop blockB
	set source_file "blockB.csv"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run trialB

define inline_script end_eeg
	set description "Executes Python code"
	___run__
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, 255)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define inline_script evaluationA
	set description "Executes Python code"
	___run__
	if var.response_answerA == "space" and var.Type == "standard":
		var.correct = 0
	elif var.response_answerA == "None" and var.Type == "deviant":
		var.correct = 0
	elif var.response_answerA == "None" and var.Type == "standard":
		var.correct = 1
	elif var.response_answerA == "space" and var.Type == "deviant":
		var.correct = 1
	
	# If correct tag = 100, if incorrect tag = 200
	if var.correct == 1:
		var.tag += 100
	else:
		var.tag += 200
	
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, var.tag)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define inline_script evaluationB
	set description "Executes Python code"
	___run__
	if var.response_answerB == "space" and var.Type == "standard":
		var.correct = 0
	elif var.response_answerB == "None" and var.Type == "deviant":
		var.correct = 0
	elif var.response_answerB == "None" and var.Type == "standard":
		var.correct = 1
	elif var.response_answerB == "space" and var.Type == "deviant":
		var.correct = 1
	
	# If correct tag = 100, if incorrect tag = 200
	if var.correct == 1:
		var.tag += 100
	else:
		var.tag += 200
	
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, var.tag)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define inline_script evaluation_practice
	set description "Executes Python code"
	___run__
	if var.response_answer_practice == "space" and var.Type == "standard":
		var.correct = 0
	elif var.response_answer_practice == "None" and var.Type == "deviant":
		var.correct = 0
	elif var.response_answer_practice == "None" and var.Type == "standard":
		var.correct = 1
	elif var.response_answer_practice == "space" and var.Type == "deviant":
		var.correct = 1
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run init_eeg always
	run practice always
	run practiceEnd always
	run start_recording always
	run blockA always
	run pause always
	run blockB always
	run goodbye always
	run end_eeg always

define feedback feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw fixdot color=green show_if="[correct]==1" style=default x=0 y=0 z_index=0
	draw fixdot color=red show_if="[correct]==0" style=default x=0 y=0 z_index=0

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Děkujeme za Váš čas.<br /><br />Experiment je u konce. Ukončíte jej<br />stiknutím LIBOVOLNÉ KLÁVESY. Poté<br />prosím vyčkejte na pokyny od experimentátora." x=0 y=0 z_index=0

define inline_script init_eeg
	set description "Executes Python code"
	___run__
	try:
		from ctypes import windll
		global io
		io = windll.dlportio # requires dlportio.dll !!!
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Dobrý den,<br /><br />vítejte v neuropsychologickém experimentu<br />na výzkum bilingválních vlastností.<br /><br />Nyní uvidíte sérii písmen v kruhu.<br />Vaším úkolem je stisknout MEZERNÍK<br />pokaždé, když uvidíte písmeno X.<br /><br />Účast na experimentu je zcela dobrovolná bez nároku<br />na finanční nebo jinou odměnu.<br />Experiment můžete kdykoli bez<br />udání důvodu ukončit.<br /><br />Nyní Vás čeká zácviková část.<br /><br />Pro pokračování stikněte LIBOVOLNOU<br />KLÁVESU." x=0 y=0 z_index=0

define logger logfileA
	set description "Logs experimental data"
	set auto_log yes

define logger logfileB
	set description "Logs experimental data"
	set auto_log yes

define inline_script onset_tag
	set description "Executes Python code"
	___run__
	
	"""
	Code the stimulus properties into integers
	for sending the the onset stimulus tag as follows:
	Standard without distractor		1
	Standard with disctrator		2
	Deviant without distractor		3
	Deviant with distractor			4
	
	...
	
	Correct answer 					+100
	Incorrect answer				+200
	
	"""
	var.tag = 0
	if var.Type == "standard" and var.Tone == 0:
		var.tag = 1
	elif var.Type == "standard" and var.Tone == 1:
		var.tag = 2
	elif var.Type == "deviant" and var.Tone == 0:
		var.tag = 3
	elif var.Type == "deviant" and var.Tone == 1:
		var.tag = 4
	else:
		var.tag = 0
		
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, var.tag)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define sketchpad pause
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Jste v polovině experimentu. <br /><br />Jakmile budete<br />připraveni pokračovat,<br />stikněte libovolnou<br />klávesu." x=0 y=0 z_index=0

define loop practice
	set source_file "blockA.csv"
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Letter1 X
	setcycle 0 Letter2 V
	setcycle 0 Letter3 Z
	setcycle 0 Letter4 K
	setcycle 0 Letter5 K
	setcycle 0 Letter6 H
	setcycle 0 Type deviant
	setcycle 0 Tone 0
	setcycle 1 Letter1 K
	setcycle 1 Letter2 N
	setcycle 1 Letter3 V
	setcycle 1 Letter4 X
	setcycle 1 Letter5 Z
	setcycle 1 Letter6 M
	setcycle 1 Type deviant
	setcycle 1 Tone 1
	setcycle 2 Letter1 W
	setcycle 2 Letter2 H
	setcycle 2 Letter3 M
	setcycle 2 Letter4 V
	setcycle 2 Letter5 K
	setcycle 2 Letter6 Z
	setcycle 2 Type standard
	setcycle 2 Tone 0
	setcycle 3 Letter1 X
	setcycle 3 Letter2 M
	setcycle 3 Letter3 N
	setcycle 3 Letter4 H
	setcycle 3 Letter5 W
	setcycle 3 Letter6 V
	setcycle 3 Type deviant
	setcycle 3 Tone 1
	setcycle 4 Letter1 H
	setcycle 4 Letter2 X
	setcycle 4 Letter3 Z
	setcycle 4 Letter4 K
	setcycle 4 Letter5 W
	setcycle 4 Letter6 N
	setcycle 4 Type deviant
	setcycle 4 Tone 0
	setcycle 5 Letter1 H
	setcycle 5 Letter2 W
	setcycle 5 Letter3 N
	setcycle 5 Letter4 Z
	setcycle 5 Letter5 V
	setcycle 5 Letter6 K
	setcycle 5 Type standard
	setcycle 5 Tone 1
	setcycle 6 Letter1 H
	setcycle 6 Letter2 W
	setcycle 6 Letter3 Z
	setcycle 6 Letter4 V
	setcycle 6 Letter5 M
	setcycle 6 Letter6 K
	setcycle 6 Type standard
	setcycle 6 Tone 0
	setcycle 7 Letter1 H
	setcycle 7 Letter2 K
	setcycle 7 Letter3 V
	setcycle 7 Letter4 N
	setcycle 7 Letter5 X
	setcycle 7 Letter6 W
	setcycle 7 Type deviant
	setcycle 7 Tone 1
	setcycle 8 Letter1 K
	setcycle 8 Letter2 V
	setcycle 8 Letter3 Z
	setcycle 8 Letter4 N
	setcycle 8 Letter5 H
	setcycle 8 Letter6 M
	setcycle 8 Type standard
	setcycle 8 Tone 0
	setcycle 9 Letter1 Z
	setcycle 9 Letter2 N
	setcycle 9 Letter3 K
	setcycle 9 Letter4 H
	setcycle 9 Letter5 M
	setcycle 9 Letter6 W
	setcycle 9 Type standard
	setcycle 9 Tone 1
	run trialPractice

define sketchpad practiceEnd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Skončila zácviková část!<br /><br />Pro spuštění expertimentu<br />stikněte libovolnou klávesu." x=0 y=0 z_index=0

define inline_script start_recording
	set description "Executes Python code"
	___run__
	try:
		global io
		port = 0xCFF8
		io.DlPortWritePortUchar(port, 254)  # Send you trigger (int 1)
		self.sleep(50)  # Uses trigger pulse for 50 ms
		io.DlPortWritePortUchar(port, 0)    # Get back to zero after 50 ms
	except:
		print 'The parallel port couldn\'t be opened'
	__end__
	set _prepare ""

define sketchpad stimulusA
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter1]" x=10 y=-234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter2]" x=224 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter3]" x=224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter4]" x=-224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter5]" x=0 y=234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter6]" x=-224 y=-128 z_index=0

define sketchpad stimulusB
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter1]" x=10 y=-234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter2]" x=224 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter3]" x=224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter4]" x=-224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter5]" x=0 y=234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter6]" x=-224 y=-128 z_index=0

define sketchpad stimulus_practice
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter1]" x=10 y=-234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter2]" x=224 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter3]" x=224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter4]" x=-224 y=96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter5]" x=0 y=234 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=38 html=yes show_if=always text="[Letter6]" x=-224 y=-128 z_index=0

define sequence trialA
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blankA always
	run beepA "[Tone]==1"
	run onset_tag always
	run stimulusA always
	run answerA always
	run evaluationA always
	run logfileA always

define sequence trialB
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blankB always
	run beepB "[Tone]==1"
	run onset_tag always
	run stimulusB always
	run answerB always
	run evaluationB always
	run logfileB always

define sequence trialPractice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run blank_practice always
	run beep_practice "[Tone]==1"
	run stimulus_practice always
	run answer_practice always
	run evaluation_practice always
	run feedback always

